PsychoPy2experiment version="2024.2.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['id'], expName, expInfo['date'])
  Experiment info = {'id': '', 'La variedad del español que mejor conozcas': 'ej. cubano'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = empathy_intonation_perc_sp
  keyboardBackend = ioHub
  logging level = debug
  runMode = 1
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Routines
  Routine prompt
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = Es una pregunta?
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  Routine check_2afc
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    TextComponent text_2afc_check
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Bien! Ahora vamos a empezar.

        Intenta responder lo más rápido posible sin cometer errores después de escuchar cada enunciado.

        (presiona la barra espaciadora para comenzar)
    KeyboardComponent key_resp_2afc_gotit
      allowedKeys = 'c','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_2afc
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    TextComponent text_2afc_instructions
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text
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    TextComponent text_2afc_instructions_continue
      letterHeight = 0.045
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $continue_text
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    KeyboardComponent key_resp_2afc_instructions
      allowedKeys = 'c', 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine practice_2afc
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    SoundComponent sound_2afc_practice_stim
      sound [set every repeat] = $path
      startVal [time (s)] = 0.500
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    TextComponent text_2afc_response_yes_practice
      letterHeight = 0.1
      pos = (-0.3, 0)
      startVal [time (s)] = 0.250
      text = Sí
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    TextComponent text_2afc_response_no_practice
      letterHeight = 0.1
      pos = (0.3, 0)
      startVal [time (s)] = 0.250
      text = No
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    KeyboardComponent key_resp_2afc_practice
      allowedKeys = '1','0'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.500
      store = first key
      storeCorrect = True
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    TextComponent text_2afc_question_practice
      color = blue
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Es una pregunta?
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  Routine trial_2afc
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    CodeComponent code_2afc
      Code Type = Both
      Begin Experiment:
        col_name = ['andalusian', 'argentine', 'castilian', 'chilean', 'cuban', 'mexican', 'peruvian', 'puertorican']
      Begin JS Experiment:
        col_name = ['andalusian', 'argentine', 'castilian', 'chilean', 'cuban', 'mexican', 'peruvian', 'puertorican'];
      Begin JS Routine:
        the_col = col_name[Math.floor(Math.random() * col_name.length)];
      Begin Routine:
        the_col = np.random.choice(col_name, p=[0.125, 0.125, 0.125, 0.125, 0.125, 0.125, 0.125, 0.125])
      End JS Routine:
        trials_2afc_loop.addData("the_col", the_col);
      End Routine:
        trials_2afc_loop.addData('the_col', the_col)
    SoundComponent sound_stim_trial
      sound [set every repeat] = $eval(the_col)
      startVal [time (s)] = 0.500
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    TextComponent text_response_yes_trial
      letterHeight = 0.1
      pos = (-0.3, 0)
      startVal [time (s)] = 0.250
      text = Sí
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    TextComponent text_response_no_trial
      letterHeight = 0.1
      pos = (0.3, 0)
      startVal [time (s)] = 0.250
      text = No
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    KeyboardComponent key_resp_2afc_trial
      allowedKeys = '1','0'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.500
      store = first key
      storeCorrect = True
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    TextComponent text_question_trial
      color = blue
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Es una pregunta?
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  Routine instructions_exposure
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    TextComponent text_exposure_instructions
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text
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    TextComponent text_exposure_instructions_continue
      letterHeight = 0.045
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $continue_text
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    KeyboardComponent key_resp_exposure_instructions
      allowedKeys = 'c', 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine trial_exposure
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    SoundComponent sound_exposure
      sound [set every repeat] = $path
      startVal [time (s)] = 0.500
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    TextComponent text_exposure_response_true
      letterHeight = 0.1
      pos = (-0.3, 0)
      startVal [time (s)] = $duration
      text = Verdad
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    TextComponent text_exposure_response_false
      letterHeight = 0.1
      pos = (0.3, 0)
      startVal [time (s)] = $duration
      text = Falso
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    KeyboardComponent key_resp_exposure
      allowedKeys = '1','0'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = $duration
      store = first key
      storeCorrect = True
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    TextComponent text_exposure_question
      color = blue
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = $duration
      text [set every repeat] = $question
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  Routine instructions_eq
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    KeyboardComponent key_resp_eq_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_eq_instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Awesome! Now on to the final task.

        You are going to see a series of statements in English.

        Please read each statement carefully and rate how strongly you agree or disagree with it by using your mouse to click on the line.

        There are no right or wrong answers, or trick questions.

        (press the spacebar to begin)
  Routine trial_eq
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    TextComponent text_eq_question_trial
      letterHeight = 0.06
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $item
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    SliderComponent slider_eq_trial
      forceEndRoutine = True
      granularity = 1
      labels = 'strongly agree', 'slightly agree', 'slightly disagree', 'strongly disagree'
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.8, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating', 'triangleMarker']
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    KeyboardComponent key_resp_eq_trial
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator instructions_exposure_loop loopType="TrialHandler"
    conditionsFile = instructions/exposure_instructions_sp_text.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'instructions_text': 'En la siguiente tarea, escucharás una serie de conversaciones cortas.', 'continue_text': ' (presiona la barra espaciadora para continuar)'},
      {'instructions_text': 'Después, leerás un enunciado sobre la conversación y decidirás si es verdadero o falso.', 'continue_text': ' (presiona la barra espaciadora para continuar)'},
      {'instructions_text': "Si crees que es verdadero teclea '1' (Sí) y si crees que \n  es falso teclea '0' (No).", 'continue_text': ' (presiona la barra espaciadora para continuar)'},
      {'instructions_text': None, 'continue_text': None},
      {'instructions_text': None, 'continue_text': None}]
    Routine instructions_exposure
  LoopTerminator instructions_exposure_loop
  LoopInitiator exposure_loop loopType="TrialHandler"
    conditionsFile = trials/exposure_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'item_num': 1, 'correct_response': 1, 'question': 'La madre le pregunta a la hija si ya fue al supermercado.', 'path': './stim/exposure_wavs/dr_stimuli_convo.wav', 'duration': 60},
      {'item_num': 2, 'correct_response': 1, 'question': 'El hijo le pregunta a la madre si la tía Marina está bien.', 'path': './stim/exposure_wavs/ga_stimuli_convo.wav', 'duration': 47},
      {'item_num': 3, 'correct_response': 0, 'question': 'La madre ya tiene arroz.', 'path': './stim/exposure_wavs/pr_stimuli_convo.wav', 'duration': 36}]
    Routine trial_exposure
  LoopTerminator exposure_loop
  LoopInitiator instructions_2afc_loop loopType="TrialHandler"
    conditionsFile = instructions/2afc_instructions_sp_text.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'instructions_text': 'En la siguiente tarea vas a escuchar una serie de frases cortas. \n\n  Vas a decidir si suenan como preguntas o no usando el teclado.', 'continue_text': "(presiona la barra espaciadora para continuar)'"},
      {'instructions_text': "Si crees que el enunciado es una pregunta, teclea '1' (Sí) y si crees que \n  no es una pregunta teclea '0' (no).\n\n  Vamos a practicar...", 'continue_text': "(presiona la barra espaciadora para continuar)'"}]
    Routine instructions_2afc
  LoopTerminator instructions_2afc_loop
  LoopInitiator trials_2afc_practice_loop loopType="TrialHandler"
    conditionsFile = trials/twoafc_practice_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'path': './stim/wavs/castilian_question_filler_Mi-esposo-conoce-al-chico.wav', 'correct_response': 1},
      {'path': './stim/wavs/argentine_question_filler_Mi-vecino-habla-mucho.wav', 'correct_response': 1},
      {'path': './stim/wavs/chilean_question_filler_Mi-padre-cantaba-bien.wav', 'correct_response': 1},
      {'path': './stim/wavs/mexican_question_filler_Felipe-no-tiene-contrasena.wav', 'correct_response': 1},
      {'path': './stim/wavs/cuban_statement_filler_Cocinabas-por-la-noche.wav', 'correct_response': 0},
      {'path': './stim/wavs/andalusian_statement_filler_Alberto-nunca-se-afeita.wav', 'correct_response': 0},
      {'path': './stim/wavs/peruvian_statement_filler_El-nino-habla-con-su-madre.wav', 'correct_response': 0},
      {'path': './stim/wavs/puertorican_statement_filler_La-nina-pinta-con-su-amiga.wav', 'correct_response': 0}]
    Routine practice_2afc
  LoopTerminator trials_2afc_practice_loop
  Routine check_2afc
  LoopInitiator trials_2afc_loop loopType="TrialHandler"
    conditionsFile = trials/twoafc_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'item_num': 1, 'correct_response': 0, 'andalusian': './stim/wavs/andalusian_match_declarative-broad-focus_Ana-lleva-el-abrigo.wav', 'argentine': './stim/wavs/argentine_match_declarative-broad-focus_Ana-lleva-el-abrigo.wav', 'castilian': './stim/wavs/castilian_match_declarative-broad-focus_Ana-lleva-el-abrigo.wav', 'chilean': './stim/wavs/chilean_match_declarative-broad-focus_Ana-lleva-el-abrigo.wav', 'cuban': './stim/wavs/cuban_match_declarative-broad-focus_Ana-lleva-el-abrigo.wav', 'mexican': './stim/wavs/mexican_match_declarative-broad-focus_Ana-lleva-el-abrigo.wav', 'peruvian': './stim/wa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,
      {'item_num': 2, 'correct_response': 0, 'andalusian': './stim/wavs/andalusian_match_declarative-broad-focus_Daniel-iba-a-Bolivia.wav', 'argentine': './stim/wavs/argentine_match_declarative-broad-focus_Daniel-iba-a-Bolivia.wav', 'castilian': './stim/wavs/castilian_match_declarative-broad-focus_Daniel-iba-a-Bolivia.wav', 'chilean': './stim/wavs/chilean_match_declarative-broad-focus_Daniel-iba-a-Bolivia.wav', 'cuban': './stim/wavs/cuban_match_declarative-broad-focus_Daniel-iba-a-Bolivia.wav', 'mexican': './stim/wavs/mexican_match_declarative-broad-focus_Daniel-iba-a-Bolivia.wav', 'peruvian': './st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,
      {'item_num': 3, 'correct_response': 0, 'andalusian': './stim/wavs/andalusian_match_declarative-broad-focus_David-leia-el-libro.wav', 'argentine': './stim/wavs/argentine_match_declarative-broad-focus_David-leia-el-libro.wav', 'castilian': './stim/wavs/castilian_match_declarative-broad-focus_David-leia-el-libro.wav', 'chilean': './stim/wavs/chilean_match_declarative-broad-focus_David-leia-el-libro.wav', 'cuban': './stim/wavs/cuban_match_declarative-broad-focus_David-leia-el-libro.wav', 'mexican': './stim/wavs/mexican_match_declarative-broad-focus_David-leia-el-libro.wav', 'peruvian': './stim/wav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,
      {'item_num': 4, 'correct_response': 0, 'andalusian': './stim/wavs/andalusian_match_declarative-broad-focus_Emilio-ama-la-marcha.wav', 'argentine': './stim/wavs/argentine_match_declarative-broad-focus_Emilio-ama-la-marcha.wav', 'castilian': './stim/wavs/castilian_match_declarative-broad-focus_Emilio-ama-la-marcha.wav', 'chilean': './stim/wavs/chilean_match_declarative-broad-focus_Emilio-ama-la-marcha.wav', 'cuban': './stim/wavs/cuban_match_declarative-broad-focus_Emilio-ama-la-marcha.wav', 'mexican': './stim/wavs/mexican_match_declarative-broad-focus_Emilio-ama-la-marcha.wav', 'peruvian': './st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
    Routine trial_2afc
  LoopTerminator trials_2afc_loop
  Routine instructions_eq
  LoopInitiator trials_eq_loop loopType="TrialHandler"
    conditionsFile = trials/eq_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'item_num': 1, 'item': 'I can easily tell if someone else wants to enter a conversation.', 'is_test_item': 1, 'is_distractor': 0, 'is_agree_score': 1, 'is_disagree_score': 0},
      {'item_num': 2, 'item': 'I prefer animals to humans.', 'is_test_item': 0, 'is_distractor': 1, 'is_agree_score': 0, 'is_disagree_score': 0},
      {'item_num': 3, 'item': 'I try to keep up with the current trends and fashions.', 'is_test_item': 0, 'is_distractor': 1, 'is_agree_score': 0, 'is_disagree_score': 0},
      {'item_num': 4, 'item': 'I find it difficult to explain to others things that I understand easily, \n  when they don’t understand it first time.', 'is_test_item': 1, 'is_distractor': 0, 'is_agree_score': 0, 'is_disagree_score': 1},
      {'item_num': 5, 'item': 'I dream most nights.', 'is_test_item': 0, 'is_distractor': 1, 'is_agree_score': 0, 'is_disagree_score': 0},
      {'item_num': 6, 'item': 'I really enjoy caring for other people.', 'is_test_item': 1, 'is_distractor': 0, 'is_agree_score': 1, 'is_disagree_score': 0},
      {'item_num': 7, 'item': 'I try to solve my own problems rather than discussing them with others.', 'is_test_item': 0, 'is_distractor': 1, 'is_agree_score': 0, 'is_disagree_score': 0},
      {'item_num': 8, 'item': 'I find it hard to know what to do in a social situation.', 'is_test_item': 1, 'is_distractor': 0, 'is_agree_score': 0, 'is_disagree_score': 1},
      {'item_num': 9, 'item': 'I am at my best first thing in the morning.', 'is_test_item': 0, 'is_distractor': 1, 'is_agree_score': 0, 'is_disagree_score': 0}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
    Routine trial_eq
  LoopTerminator trials_eq_loop
